OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)

Acquisition client => #0
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Timeline generator => #2
  Lua Script = C:/Users/willa/Documents/Diss/BCI_paradigm-main/timeline.lua
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "phoneme stimuli" => #3
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
Input stream=#3 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Sound Player "apple"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/apple_audio.wav
  Loop = false
#2 -> Sound Player "dog"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/dog_audio.wav
  Loop = false
#2 -> Sound Player "pencil"
  PLAY trigger = OVTK_StimulationId_Label_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/pencil_audio.wav
  Loop = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking5" => #8
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_4
Input stream=#8 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking5.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking1" => #10
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#10 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking1.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking2" => #12
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_1
Input stream=#12 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking2.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking3" => #14
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_2
Input stream=#14 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking3.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking4" => #16
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_3
Input stream=#16 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking4.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "rest" => #18
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_RestStart
Input stream=#18 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/resting.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/apple_audio.jpg
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/dog_audio.jpg
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_audio.jpg
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/apple_text.png
  Stimulation 4 = OVTK_StimulationId_Label_0A
  Cue Image 5 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/dog_text.png
  Stimulation 5 = OVTK_StimulationId_Label_0B
  Cue Image 6 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_text.png
  Stimulation 6 = OVTK_StimulationId_Label_0C
  Cue Image 7 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/apple_image.jpg
  Stimulation 7 = OVTK_StimulationId_Label_1A
  Cue Image 8 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/dog_image.jpg
  Stimulation 8 = OVTK_StimulationId_Label_1E
  Cue Image 9 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 9 = OVTK_StimulationId_Label_1C
  Cue Image 10 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 10 = OVTK_StimulationId_Label_DC
  Cue Image 11 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 11 = OVTK_StimulationId_Label_DA
  Cue Image 12 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 12 = OVTK_StimulationId_Label_DB
  Cue Image 13 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 13 = OVTK_StimulationId_Label_DD
  Cue Image 14 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 14 = OVTK_StimulationId_Label_DE
  Cue Image 15 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 15 = OVTK_StimulationId_Label_DF
  Cue Image 16 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 16 = OVTK_StimulationId_Label_23
  Cue Image 17 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 17 = OVTK_StimulationId_Label_21
  Cue Image 18 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 20 = OVTK_StimulationId_Label_14
  Cue Image 21 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 21 = OVTK_StimulationId_Label_15
  Cue Image 22 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 22 = OVTK_StimulationId_Number_16
  Cue Image 23 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 23 = OVTK_StimulationId_Label_17
  Cue Image 24 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 24 = OVTK_StimulationId_Label_18
  Cue Image 25 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 25 = OVTK_StimulationId_Label_19
  Cue Image 26 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 26 = OVTK_StimulationId_Label_22
  Cue Image 27 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 27 = OVTK_StimulationId_Label_1D
  Cue Image 28 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 28 = OVTK_StimulationId_Label_23
  Cue Image 29 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 29 = OVTK_StimulationId_Label_24
  Cue Image 30 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/dog_image.jpg
  Stimulation 30 = OVTK_StimulationId_Label_25
  Cue Image 31 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 31 = OVTK_StimulationId_Label_26
  Cue Image 32 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 32 = OVTK_StimulationId_Number_00
  Cue Image 33 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking5.png
  Stimulation 33 = OVTK_GDF_Stage_4
  Cue Image 34 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking4.png
  Stimulation 34 = OVTK_GDF_Stage_3
  Cue Image 35 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking3.png
  Stimulation 35 = OVTK_GDF_Stage_2
  Cue Image 36 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking2.png
  Stimulation 36 = OVTK_GDF_Stage_1
  Cue Image 37 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 37 = OVTK_GDF_VEP
  Cue Image 38 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/break_image.png
  Stimulation 38 = OVTK_StimulationId_Target
  Cue Image 39 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking1.png
  Stimulation 39 = OVTK_GDF_Tongue
  Cue Image 40 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/rest.png
  Stimulation 40 = OVTK_StimulationId_RestStart
  Cue Image 41 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Ambulance_audio.wav
  Stimulation 41 = OVTK_StimulationId_Label_41
  Cue Image 42 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Stop_audio.wav
  Stimulation 42 = OVTK_StimulationId_Label_42
  Cue Image 43 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Toilet_audio.wav
  Stimulation 43 = OVTK_StimulationId_Label_43
  Cue Image 44 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Water_audio.wav
  Stimulation 44 = OVTK_StimulationId_Label_44
  Cue Image 45 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/ambulance.png
  Stimulation 45 = OVTK_StimulationId_Label_45
  Cue Image 46 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Stop.jpg
  Stimulation 46 = OVTK_StimulationId_Label_46
  Cue Image 47 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Toilet.png
  Stimulation 47 = OVTK_StimulationId_Label_47
  Cue Image 48 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Water.jpg
  Stimulation 48 = OVTK_StimulationId_Label_48
  Cue Image 49 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Ambulance_text.png
  Stimulation 49 = OVTK_StimulationId_Label_49
  Cue Image 50 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Stop_text.png
  Stimulation 50 = OVTK_StimulationId_Label_50
  Cue Image 51 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Toilet_text.png
  Stimulation 51 = OVTK_StimulationId_Label_51
  Cue Image 52 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Water_text.png
  Stimulation 52 = OVTK_StimulationId_Label_52
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "break" => #21
  Epoch duration (in sec) = 60
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Input stream=#21 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/break.csv
  Precision = 10
  Append data = false
  Only last matrix = false

Sound Player "Ambulance"
  PLAY trigger = OVTK_StimulationId_Label_41
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Ambulance_audio.wav
  Loop = false

Sound Player "Stop"
  PLAY trigger = OVTK_StimulationId_Label_42
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Stop_audio.wav
  Loop = false

Sound Player "Water"
  PLAY trigger = OVTK_StimulationId_Label_44
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Water_audio.wav
  Loop = false

Sound Player "Toilet"
  PLAY trigger = OVTK_StimulationId_Label_43
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Toilet_audio.wav
  Loop = false
