OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)

Acquisition client => #0
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Timeline generator => #2
  Lua Script = C:/Users/willa/Documents/Diss/BCI_paradigm-main/timeline_tester.lua
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "phoneme stimuli" => #3
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
Input stream=#3 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Sound Player "Ambulance"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Ambulance_audio.wav
  Loop = false
#2 -> Sound Player "Clock"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/clock_audio.wav
  Loop = false
#2 -> Sound Player "Hospital"
  PLAY trigger = OVTK_StimulationId_Label_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/Hospital_audio.wav
  Loop = false
#2 -> Sound Player "Lamp"
  PLAY trigger = OVTK_StimulationId_Label_04
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/Users/willa/Documents/Diss/BCI_paradigm-main/wavs/lamp_audio.wav
  Loop = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking1" => #9
  Epoch duration (in sec) = 0.1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#9 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking1.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking2" => #11
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_1
Input stream=#11 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking2.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking3" => #13
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_2
Input stream=#13 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking3.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking4" => #15
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_3
Input stream=#15 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking4.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking5" => #17
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_4
Input stream=#17 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking5.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking6" => #19
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class7
Input stream=#19 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking6.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking7" => #21
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class8
Input stream=#21 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking7.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking8" => #23
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class9
Input stream=#23 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking8.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking9" => #25
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class10
Input stream=#25 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking9.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking10" => #27
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class11
Input stream=#27 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/speaking10.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/White_noise_image.jpg
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/White_noise_image.jpg
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/White_noise_image.jpg
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/White_noise_image.jpg
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Ambulance_text.png
  Stimulation 5 = OVTK_StimulationId_Label_0A
  Cue Image 6 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/clock_text.png
  Stimulation 6 = OVTK_StimulationId_Label_0B
  Cue Image 7 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/lamp_text.png
  Stimulation 7 = OVTK_StimulationId_Label_0C
  Cue Image 8 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Hospital_text.png
  Stimulation 8 = OVTK_StimulationId_Label_0D
  Cue Image 9 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Ambulance.png
  Stimulation 9 = OVTK_StimulationId_Label_1A
  Cue Image 10 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Clock.png
  Stimulation 10 = OVTK_StimulationId_Label_1B
  Cue Image 11 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Hospital.png
  Stimulation 11 = OVTK_StimulationId_Label_1C
  Cue Image 12 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/lamp.jpg
  Stimulation 12 = OVTK_StimulationId_Label_1D
  Cue Image 13 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/rest.png
  Stimulation 13 = OVTK_GDF_Cue_Unknown_Undefined
  Cue Image 14 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/buffer.png
  Stimulation 14 = OVTK_GDF_Calibration
  Cue Image 15 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/start_message.png
  Stimulation 15 = OVTK_GDF_AEP
  Cue Image 16 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 16 = OVTK_StimulationId_Label_23
  Cue Image 17 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 17 = OVTK_StimulationId_Label_21
  Cue Image 18 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 20 = OVTK_StimulationId_Label_14
  Cue Image 21 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 21 = OVTK_StimulationId_Label_15
  Cue Image 22 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 22 = OVTK_StimulationId_Number_16
  Cue Image 23 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 23 = OVTK_StimulationId_Label_17
  Cue Image 24 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 24 = OVTK_StimulationId_Label_18
  Cue Image 25 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 25 = OVTK_StimulationId_Label_19
  Cue Image 26 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Get_ready.png
  Stimulation 26 = OVTK_StimulationId_TrialStart
  Cue Image 27 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking6.jpeg
  Stimulation 27 = OVTK_GDF_class7
  Cue Image 28 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking7.jpeg
  Stimulation 28 = OVTK_GDF_class8
  Cue Image 29 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking8.jpeg
  Stimulation 29 = OVTK_GDF_class9
  Cue Image 30 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking9.jpeg
  Stimulation 30 = OVTK_GDF_class10
  Cue Image 31 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking10.jpeg
  Stimulation 31 = OVTK_GDF_class11
  Cue Image 32 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 32 = OVTK_StimulationId_Number_00
  Cue Image 33 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking2.jpeg
  Stimulation 33 = OVTK_GDF_Stage_1
  Cue Image 34 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking3.jpeg
  Stimulation 34 = OVTK_GDF_Stage_2
  Cue Image 35 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking4.jpeg
  Stimulation 35 = OVTK_GDF_Stage_3
  Cue Image 36 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking5.jpeg
  Stimulation 36 = OVTK_GDF_Stage_4
  Cue Image 37 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/pencil_image.jpg
  Stimulation 37 = OVTK_GDF_VEP
  Cue Image 38 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/break_image.png
  Stimulation 38 = OVTK_StimulationId_Target
  Cue Image 39 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/speaking1.jpeg
  Stimulation 39 = OVTK_GDF_Tongue
  Cue Image 40 = C:/Users/willa/Documents/Diss/BCI_paradigm-main/imgs/Relax.png
  Stimulation 40 = OVTK_StimulationId_RestStart
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "Relax" => #30
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_RestStart
Input stream=#30 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/relax.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "break" => #32
  Epoch duration (in sec) = 110
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Input stream=#32 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/break.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "GetReady" => #34
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_TrialStart
Input stream=#34 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/get_ready.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "Buffer" => #36
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Calibration
Input stream=#36 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/buffer.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "Start_slide" => #38
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_AEP
Input stream=#38 -> CSV File Writer
  Filename = C:/Users/willa/Documents/Diss/BCI_paradigm-main/experiments/start_slide.csv
  Precision = 10
  Append data = false
  Only last matrix = false
